PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = Experiment
  Screen = 1
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Routines
  Routine start
    TextComponent text
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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      text:
        In the following experiment you will be presented with a series of questions.

        Your job will be to indicate your responses using a slider.

        If you have any questions before you begin, feel free to let one of us know.

        Please press the enter key to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine scenarioTrials
    RatingScaleComponent likelihood
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      markerStart = 50
      size = 2
      forceEndRoutine = True
      low = 0
      categoryChoices = 1 (0%), 2 (25%), 3 (50%), 4 (75%), 5 (100%)
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      customize_everything:
        textSize = .5, marker=u'triangle',
        size=2, pos=[0.0, -0.5], showAccept = False, showValue = False,
        choices=[u'Definitely Not\n     (0%)', u'Probably Not\n     (25%)', u'Possibly\n   (50%)', u'Quite Probably\n     (75%)', u'Definitely\n   (100%)'],
        tickHeight=-1, markerStart=u'50'
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Scenario
      text [set every repeat] = $scenarioDescrip
      pos = (0, .6)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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    TextComponent qPrompt
      text = What is the likelihood that you will seek help from the course instructor?
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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    TextComponent proceedInstructions
      text = Press the enter key to confirm your response
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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  Routine end
    TextComponent text_2
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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      text:
                    Thank you for your participation!

        Please press the enter key to exit the experiment.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GPA
    TextComponent gpaProbe
      text = Please indicate your overall university average using the slider below.
      pos = (0, .4)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = .075
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    RatingScaleComponent gpaScale
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 30
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      customize_everything:
        textSize = .4, marker=u'triangle',
        size=2, pos=[0.0, -0.5], showAccept = False, showValue = False,
        choices=[u'60-64.9', u'65-69.9', u'70-74.9', u'75-79.9', u'80-84.9', u'85-89.9', u'90-94.9', u'95-100'],
        tickHeight=-1, markerStart=None
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent proceedInstructions2
      text = Press the enter key to confirm your response
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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    TextComponent noteText
      text = Note: We are using intervals of ~5%
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.075
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Flow
  Routine start
  LoopInitiator scenarios loopType="TrialHandler"
    conditionsFile = scenario.xlsx
    loopType = random
    nReps = 1
    conditions = [{'scenarioDescrip': u'It has been two weeks since classes have begun, and you are struggling to understand some of the concepts being taught. You have gone over the relevant materials to no avail\u2026', 'scenarioID': 1}]
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    Routine scenarioTrials
  LoopTerminator scenarios
  Routine GPA
  Routine end
